PsychoPy2experiment version="2020.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = main
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Routines
  Routine baseline
    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Please look at the screen for a moment.
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    ImageComponent image_01
      image = exp_data/img/01.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 15
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    ImageComponent image_02
      image = exp_data/img/02.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 15
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    ImageComponent image_03
      image = exp_data/img/03.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 35
      stopVal [duration (s)] = 15
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    ImageComponent image_04
      image = exp_data/img/04.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 50
      stopVal [duration (s)] = 15
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    ImageComponent image_05
      image = exp_data/img/05.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 65
      stopVal [duration (s)] = 15
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  Routine stimulus
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie = ./exp_data/Dragon.mp4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 203
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  Routine welcome
    TextComponent Welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Wellcome!

        In the next minutes you will be prompted with two tasks, please follow the instructions on screen.

        When you are ready, press the spacebar...
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine breath
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine thanks
    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        The experiment is over.
        Thank you for your participation!
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    PolygonComponent fixation_cross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine welcome
  Routine baseline
  Routine fixation
  Routine stimulus
  Routine thanks
